alias,pop,parent,dims,gating_method,gating_args,collapseDataForGating,groupBy,preprocessing_method,preprocessing_args
Cells,+,root,"FSC-A,SSC-A",manualGate,"gate = list(new('filters', .Data = list(new('polygonGate', boundaries = structure(c(25041.3287772274, 39828.202051147, 201427.602830411, 266384.224712272, 266384.224712272, 125380.82599311, 48277.8439219582, 35075.225688554, 1276.65820530919, 16591.6340961545, 57255.5355994334, 234169.912269543, 233641.809652617, 153370.211879911), .Dim = c(7L, 2L), .Dimnames = list(NULL, c('FSC-A', 'SSC-A'))), parameters = new('parameters', .Data = list(new('unitytransform',     .Data = function ()     NULL, parameters = 'FSC-A', transformationId = 'defaultUnityTransform'),     new('unitytransform', .Data = function ()     NULL, parameters = 'SSC-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Cells'))))",TRUE,4,ppmanualGate,NA
Single Cells,+,Cells,"FSC-A,FSC-H",manualGate,"gate = list(new('filters', .Data = list(new('polygonGate', boundaries = structure(c(26097.5340110788, 265856.122095347, 265328.019478421, 17647.8921402676, 13423.0183946003, 188224.984597007, 243675.759374206, 26097.4812008171), .Dim = c(4L, 2L), .Dimnames = list(NULL, c('FSC-A', 'FSC-H'))), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'FSC-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'FSC-H', transformationId = 'defaultUnityTransform'))),     filterId = 'Single Cells'))))",TRUE,4,ppmanualGate,NA
Live Cells,+,Single Cells,"Alexa Fluor 405-A,Alexa Fluor 430-A",manualGate,"gate = list(new('filters', .Data = list(new('polygonGate', boundaries = structure(c(1.76933499500431, 2.36623258884753, 2.35611568047731, -0.668839922219709, -0.668839922219709, 2.3257639436758, 1.57711272427921, -0.638490208799874, -0.648607117170098, 2.27517940182468), .Dim = c(5L, 2L), .Dimnames = list(NULL, c('Alexa Fluor 405-A', 'Alexa Fluor 430-A'))), parameters = new('parameters', .Data = list(    new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 405-A', transformationId = 'defaultUnityTransform'),     new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 430-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Live Cells'))))",TRUE,4,ppmanualGate,NA
T Cells,+,Live Cells,"APC-Cy7-A,PE-A",manualGate,"gate = list(new('filters', .Data = list(new('ellipsoidGate', mean = c('APC-Cy7-A' = 0.790524110185123, 'PE-A' = 3.37792241417911), cov = structure(c(1.46219327245172, 0.0228869431409292, 0.0228869431409292, 0.681437971232869), .Dim = c(2L, 2L), .Dimnames = list(c('APC-Cy7-A', 'PE-A'), c('APC-Cy7-A', 'PE-A'))), distance = 1, parameters = new('parameters', .Data = list(    new('unitytransform', .Data = function ()     NULL, parameters = 'APC-Cy7-A', transformationId = 'defaultUnityTransform'),     new('unitytransform', .Data = function ()     NULL, parameters = 'PE-A', transformationId = 'defaultUnityTransform'))),     filterId = 'T Cells'))))",TRUE,4,ppmanualGate,NA
Dendritic Cells,+,Live Cells,"APC-Cy7-A,PE-A",manualGate,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('APC-Cy7-A' = 1.5568799192296, 'PE-A' = -0.112410973548218), max = c('APC-Cy7-A' = 3.59037850164465, 'PE-A' = 2.34599776041625), parameters = new('parameters', .Data = list(    new('unitytransform', .Data = function ()     NULL, parameters = 'APC-Cy7-A', transformationId = 'defaultUnityTransform'),     new('unitytransform', .Data = function ()     NULL, parameters = 'PE-A', transformationId = 'defaultUnityTransform'))),     filterId = 'Dendritic Cells'))))",TRUE,4,ppmanualGate,NA
CD4 T Cells,+,T Cells,"Alexa Fluor 700-A,Alexa Fluor 488-A",manualGate,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 700-A' = 1.72570436010095, 'Alexa Fluor 488-A' = -0.132644790288667), max = c('Alexa Fluor 700-A' = 3.51484443183296, 'Alexa Fluor 488-A' = 1.9919059674584), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 700-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 488-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD4 T Cells'))))",TRUE,4,ppmanualGate,NA
CD8 T Cells,+,T Cells,"Alexa Fluor 700-A,Alexa Fluor 488-A",manualGate,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 700-A' = -0.348071632133871, 'Alexa Fluor 488-A' = 2.13354268464154), max = c('Alexa Fluor 700-A' = 1.88835345753114, 'Alexa Fluor 488-A' = 4.07598909172458), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 700-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = 'Alexa Fluor 488-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD8 T Cells'))))",TRUE,4,ppmanualGate,NA
CD69+ CD4 T Cells,+,CD4 T Cells,"Alexa Fluor 647-A,7-AAD-A",manualGate,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 647-A' = -Inf, '7-AAD-A' = 2.60903737804208), max = c('Alexa Fluor 647-A' = Inf, '7-AAD-A' = 4.60206832697623), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 647-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = '7-AAD-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD69+ CD4 T Cells'))))",TRUE,4,ppmanualGate,NA
CD69+ CD8 T Cells,+,CD8 T Cells,"Alexa Fluor 647-A,7-AAD-A",manualGate,"gate = list(new('filters', .Data = list(new('rectangleGate', min = c('Alexa Fluor 647-A' = -Inf, '7-AAD-A' = 2.43704993574826), max = c('Alexa Fluor 647-A' = Inf, '7-AAD-A' = 4.40984706794197), parameters = new('parameters',     .Data = list(new('unitytransform', .Data = function ()     NULL, parameters = 'Alexa Fluor 647-A', transformationId = 'defaultUnityTransform'),         new('unitytransform', .Data = function ()         NULL, parameters = '7-AAD-A', transformationId = 'defaultUnityTransform'))),     filterId = 'CD69+ CD8 T Cells'))))",TRUE,4,ppmanualGate,NA
